PsychoPy2experiment version="1.90.1"
Settings
  expName = 1
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Window size (pixels) = [1360, 768]
  Screen = 1
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Units = use prefs
  Save csv file = True
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Routines
  Routine wel
    TextComponent text_wel
      startVal [time (s)] = 0.0
      font = Consonlas
      letterHeight = 0.07
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      text:
        本实验是一个词汇判断分类任务

        您需要将屏幕中央出现的词语分类到左上角或右上角的类别中。

        首先，请把您左右手的食指或中指放在键盘的'E'和'I'上。

        如果屏幕中央的词属于左上角的词语类别时，请按'E'键；如果属于右上角的词语类别时，则按'I'键。

        每个词只能归入一个类别。

        如果您出错了，便会看见一个红色的'X'。请尽可能又快又好地完成任务。

        下面将会进入练习任务，请您尽快熟悉实验程序。

        请按空格键开始
    KeyboardComponent key_resp_wel
      startVal [time (s)] = 0.0
      allowedKeys = 'space'
      forceEndRoutine = True
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  Routine trian_1
    TextComponent beauty_left
      startVal [time (s)] = 0.0
      pos = (-0.8, 0.8)
      text = 美丽女性
      font = Consonlas
      letterHeight = 0.07
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    TextComponent ugly_right
      startVal [time (s)] = 0.0
      pos = (0.8, 0.8)
      text = 普通女性
      font = Consonlas
      letterHeight = 0.07
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    TextComponent or_hot
      startVal [time (s)] = 0.0
      pos = (-0.85, 0.6)
      font = Consolas
      letterHeight = 0.06
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      text:
        OR

        辣味
    ImageComponent image_train_1
      startVal [time (s)] = 0
      size = (0.7, 1.1)
      image [set every repeat] = $image
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    PolygonComponent cross
      startVal [time (s)] = 0.0
      pos = (0, -0.8)
      size = (0.3, 0.3)
      ori = 45
      shape = cross
      fillColor = $[1,-1,-1]
      lineWidth = 0.2
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    KeyboardComponent key_resp_2
      startVal [time (s)] = 0.0
      allowedKeys = 'e','i'
      forceEndRoutine = True
      storeCorrect = True
      correctAns = $ans
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Flow
  Routine wel
  LoopInitiator trials loopType="TrialHandler"
    nReps = 1
    conditionsFile = loop_train_1.xlsx
    loopType = random
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    conditions:
      [OrderedDict([('image', 'photo\\\\beauty\\\\mn.png'), ('ans', 'e')]),
      OrderedDict([('image', 'photo\\\\normal\\\\cn3.png'), ('ans', 'i')])]
    Routine trian_1
  LoopTerminator trials
